CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['The goal: Quantification of lipid droplets in four breast cancer cell lines treated with DMSO or bosutinb. ', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['We extract the replicate date, well, timepoint, the number behind the s and behind the w.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Date>\d{8})-.*-t(?P<Time>\d.*)_(?P<Well>.*)_(?P<S>.*)_(?P<W>.*).tif
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:.*\\(?P<Replicate>.*)
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "w3")
    Name to assign these images:lipidtox
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w1")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "w2")
    Name to assign these images:actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc.', '', '', 'Maybe consider using different plates or replicates to be analyzed separately?']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identify the HOECHST-stained nuclei']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
    Select the input image:DNA
    Name the primary objects to be identified:nucleus
    Typical diameter of objects, in pixel units (Min,Max):15,70
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After declumping only
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:0.3
    Lower and upper bounds on threshold:0.0003,1
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    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Minimum Cross-Entropy

IdentifySecondaryObjects:[module_num:6|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notes:['Identify cells using nuclei. ']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
    Select the input objects:nucleus
    Name the objects to be identified:cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:nucleusWithMatchedCell
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.5
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0002,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:50
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:DNA, actin, lipidtox
    Select objects to measure:cell

ExportToSpreadsheet:[module_num:8|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notes:['Export the output data in a csv file. ']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Elsewhere...|E:\\20240923_lipidtox\\20241014_rep1_quantification
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:lipidtox_quantification_
    Overwrite existing files without warning?:No
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